PsychoPy2experiment version="2023.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B', 'C', 'D']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [2194, 1234]
  expName = gca
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos [set every frame] = position
      save = every look
      shape = rectangle
      size [set every repeat] = (0.14, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
      timeRelativeTo = routine
      units = from exp settings
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code_feedback
      Code Type = Py
      Before Experiment:
        feedback_color = "grey"
        feedback_audio = "audio/win.wav"
      Begin Routine:
        looked_at = False
      Each Frame:
        if image.contains(mouse):
            looked_at = True
            continueRoutine = False
      End Routine:
        if roi.wasLookedIn | looked_at:
            feedback_color = "red"
            feedback_audio = "audio/error.wav"
        else:
            feedback_color = "green"
            feedback_audio = "audio/win.wav"
  Routine feedback
    PolygonComponent polygon
      fillColor [set every repeat] = $feedback_color
      lineColor = $feedback_color
      pos [set every repeat] = position
      shape = rectangle
      size = (0.15, 0.195)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent image_feedback
      image [set every repeat] = $eval(trialtype)
      pos [set every repeat] = position
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    SoundComponent sound_1
      sound [set every repeat] = $feedback_audio
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.3
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = white
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = white
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine cross
    PolygonComponent fixate
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4 + random()
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  Routine blank
    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0 + random()
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  Routine welcome
    TextComponent welcome_msg
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrter Teilnehmer, sehr geehrte Teilnehmerin,
        vielen Dank für Ihre Teilnahme an unserem Experiment.

        Bitte drücken Sie die Leertaste um zu starten.
    KeyboardComponent space_resp
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $"chooseBlock"+expInfo['group']+".xlsx"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $random(3)*8
      conditionsFile = $posFile
      loopType = random
      nReps = 1
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      Routine cross
      Routine blank
      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
